PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1280, 720]
  expName = screen_scale
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Routines
  Routine screen_scale
    CodeComponent code_JS
      Code Type = JS
      Begin JS Experiment:
        event=psychoJS.eventManager;
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
    CodeComponent code_scale
      Code Type = Auto->JS
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      Begin Experiment:
        oldt=0
        x_size=8.560
        y_size=5.398
        screen_height=0

        if win.units=='norm':
            x_scale=.05
            y_scale=.1
            dbase = .0001
            unittext=' norm units'
            vsize=2
        elif win.units=='pix':
            x_scale=60
            y_scale=40
            dbase = .1
            unittext=' pixels'
            vsize=win.size[1]
        else:
            x_scale=.05
            y_scale=.05
            dbase = .0001
            unittext=' height units'
            vsize=1
      Begin Routine:
        event.clearEvents()
      Each Frame:
        keys=event.getKeys()

        if len(keys):
            if t-oldt<.5:
                dscale=5*dbase
                oldt=t
            else:
                dscale=dbase
                oldt=t
            if 'space' in keys and t > 1:
                continueRoutine=False
            elif 'up' in keys:
                y_scale=round((y_scale+dscale)*10000)/10000
            elif 'down' in keys:
                y_scale=round((y_scale-dscale)*10000)/10000
            elif 'left' in keys:
                x_scale=round((x_scale-dscale)*10000)/10000
            elif 'right' in keys:
                x_scale=round((x_scale+dscale)*10000)/10000
            screen_height=round(vsize*10/y_scale)/10
            text_bottom.text='X Scale = '+str(x_scale)+unittext+' per cm, Y Scale = '+str(y_scale)+unittext+' per cm\nScreen height = '+str(screen_height)+' cm\n\nPress the space bar when done'
            ccimage.size=[x_size*x_scale, y_size*y_scale]
      End Routine:
        thisExp.addData('X Scale',x_scale)
        thisExp.addData('Y Scale',y_scale)
    TextComponent text_top
      letterHeight = 0.1
      pos = (0, .7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Resize this image to match the size of a credit card
        Up arrow for taller
        Down arrow for shorter
        Left arrow for narrower
        Right arrow for wider
    TextComponent text_bottom
      letterHeight = 0.1
      pos = (0, -.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the space bar when done
      units = norm
      wrapWidth = 1.5
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    ImageComponent ccimage
      image = bank-1300155_640.png
      size = $(x_size*x_scale, y_size*y_scale)
      startVal [time (s)] = 0.0
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  Routine rectangle
    TextComponent text
      letterHeight = 0.1
      pos = (0, -.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        This shape should be a 10 cm square.
        Component size  (10*x_scale, 10*y_scale) set every repeat.
        Press space to continue
    PolygonComponent polygon
      fillColor = $[1,1,1]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (10*x_scale, 10*y_scale)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent text_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Fin
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test
    VariableComponent window_y
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    VariableComponent window_x
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        for mon in psychopy.monitors.getAllMonitors():
            window_x, window_y = psychopy.monitors.Monitor(mon).getSizePix()
    TextComponent text_3
      letterHeight = 1
      startVal [time (s)] = 0.0
      text = $window_x
      units = pix
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine screen_scale
  Routine rectangle
  Routine end
  Routine test
